OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  Select the desire channels from the Channel Selector
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal strea, Input stream 3=#0.Stimulations, Input stream 4=#0.Channel localisation -> Identity => #1
#1.Output stream 2 -> Channel Selector "FCz,C1,Cz,C2,CPz" => #2
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Fitler Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
-> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average => #7
-> Crop => #8
  Crop method = Min/Max
  Min crop value = 5.30
  Max crop value = 100
-> Simple DSP "Shift values" => #9
  Equation = x-5.30
Input signal=#9 -> 0xc67a01dc LSL Export (Gipsa)
  Stream name = Player_1_stream
  Stream type = EEG
Signal=#9 -> Signal display "Beta Power Cropped and shifted"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
Input stream 2=#8 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Crop/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
Signal=#7 -> Signal display "Beta Power"
  Time Scale = 100.000000
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100.000000
Signal=#2, Stimulations=#1.Output stream 3 -> Signal display "Beta Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
