OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Simple DSP => #1
  Equation = 1-x
Input signal=#1, Input stimulations=#0.Stimulations -> LSL Export (Gipsa)
  Stream name = SawTooth1
  Stream type = EEG
Data=#1, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#0.Signal stream, Input stimulations=#0.Stimulations -> LSL Export (Gipsa)
  Stream name = SawTooth0
  Stream type = EEG
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
